CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "MAX")
    Name to assign these images:Max
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AVG")
    Name to assign these images:Avg
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Splitting channels of the image stack into separate images']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
    Select the input image:Avg
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Avg_Hoechst
    Channel number:2
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    Image name:Avg_MsT7
    Channel number:3
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    Image name:Avg_T7
    Channel number:4
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    Image name:Avg_Phalloidin

ColorToGray:[module_num:6|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
    Select the input image:Max
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Max_Hoechst
    Channel number:2
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    Image name:Max_MsT7
    Channel number:3
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    Image name:Max_T7
    Channel number:4
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    Image name:Max_Phalloidin

IdentifyPrimaryObjects:[module_num:7|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notes:['Identifying cell nucleus based on Hoechst staining']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
    Select the input image:Max_Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:8|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notes:['Identifying the rest of the cell based on Actin staining (phalloidin)']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Max_Phalloidin
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:9|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notes:['Measuring size of the cells']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
    Select objects to measure:Cell
    Calculate the Zernike features?:No

EnhanceOrSuppressFeatures:[module_num:10|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notes:['Enhacning T7 staining for better segmentation']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
    Select the input image:Max_T7
    Name the output image:EnhanceT7
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:11|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notes:['Identifying phages based in Enhanced staining of T7 channel']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
    Select the input image:EnhanceT7
    Name the primary objects to be identified:Phage
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.0225
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
MeasureImageIntensity:[module_num:12|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
    Select the image to measure:Avg_T7
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:Avg_Phalloidin
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['Measuring size of phages']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
    Select objects to measure:Phage
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:Avg_T7
    Select objects to measure:Phage

RelateObjects:[module_num:15|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
    Parent objects:Cell
    Child objects:Phage
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:BoundPhage
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|G:\\My Drive\\Lab\\Experiments\\TrkB.PhD\\TrkB Phage Display\\Biotin-BDNF-TrkB complex based PhD\\UB.V.038\\CHO-TrkB\\T7-Phall_CP_report
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Cell,Image|Count_Nuclei,Image|Count_Phage,Image|Group_Index,Image|Group_Number,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_01Images,Image|ExecutionTime_06ColorToGray,Image|ExecutionTime_07IdentifyPrimaryObjects,Image|ExecutionTime_16MeasureImageIntensity,Image|ExecutionTime_11EnhanceOrSuppressFeatures,Image|ExecutionTime_02Metadata,Image|ExecutionTime_18MeasureObjectIntensity,Image|ExecutionTime_08IdentifySecondaryObjects,Image|ExecutionTime_17MeasureObjectSizeShape,Image|ExecutionTime_09MeasureObjectSizeShape,Image|ExecutionTime_19RelateObjects,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:T7_Actin_Run2_
    Overwrite existing files without warning?:Yes
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